WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(Driver(Category=CreateContext), Index(Category=CreateContext))
-> OpenEphys.Onix1.CreateContext(Driver=riffa, Index=0) => #1
ExternalizedMapping(Heartbeat, AnalogIO, DigitalIO, ClockOutput, HarpInput, MemoryMonitor) => #2
#1, #2 -> OpenEphys.Onix1.ConfigureBreakoutBoard => #3
  Name=BreakoutBoard
  Heartbeat(DeviceName=BreakoutBoard/PersistentHeartbeat, DeviceAddress=0, BeatsPerSecond=100)
  AnalogIO
    DeviceName=BreakoutBoard/AnalogIO
    DeviceAddress=6
    Enable=true
    InputRange0=TenVolts
    InputRange1=TenVolts
    InputRange2=TenVolts
    InputRange3=TenVolts
    InputRange4=TenVolts
    InputRange5=TenVolts
    InputRange6=TenVolts
    InputRange7=TenVolts
    InputRange8=TenVolts
    InputRange9=TenVolts
    InputRange10=TenVolts
    InputRange11=TenVolts
    Direction0=Output
    Direction1=Input
    Direction2=Input
    Direction3=Input
    Direction4=Input
    Direction5=Input
    Direction6=Input
    Direction7=Input
    Direction8=Input
    Direction9=Input
    Direction10=Input
    Direction11=Input
  DigitalIO(DeviceName=BreakoutBoard/DigitalIO, DeviceAddress=7, Enable=true, DeadTime=0, SampleRate=20)
  ClockOutput(DeviceName=BreakoutBoard/OutputClock, DeviceAddress=5, ClockGate=true, Frequency=1000000, DutyCycle=50, Delay=0)
  HarpInput(DeviceName=BreakoutBoard/HarpSyncInput, DeviceAddress=12, Enable=true, Source=Breakout)
  MemoryMonitor(DeviceName=BreakoutBoard/MemoryMonitor, DeviceAddress=10, Enable=true, SamplesPerSecond=10)
Disable ExternalizedMapping => #4
  Rhs2116Pair(Category="Headstage Rhs2116")
  StimulusTrigger(Category="Headstage Rhs2116")
  Port(DisplayName="Headstage Port", Category="Headstage Rhs2116")
  PortVoltage(DisplayName="Headstage PortVoltage", Category="Headstage Rhs2116")
#3, #4 -> Disable OpenEphys.Onix1.ConfigureHeadstageRhs2116 => #5
  Name=HeadstageRhs2116
  Rhs2116Pair
    DeviceName=HeadstageRhs2116/Rhs2116Pair
    DeviceAddress=256
    Enable=true
    DspCutoff=Off
    AnalogLowCutoff=Low100mHz
    AnalogLowCutoffRecovery=Low250Hz
    AnalogHighCutoff=High10000Hz
  StimulusTrigger
    DeviceName=HeadstageRhs2116/StimulusTrigger
    DeviceAddress=258
    Enable=true
    TriggerSource=Local
    Armed=true
    StimulusSequence
      Stimuli
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
        Rhs2116Stimulus
          NumberOfStimuli=0
          AnodicFirst=true
          DelaySamples=0
          DwellSamples=0
          AnodicAmplitudeSteps=0
          AnodicWidthSamples=0
          CathodicAmplitudeSteps=0
          CathodicWidthSamples=0
          InterStimulusIntervalSamples=0
      CurrentStepSize=Step5000nA
  Port=PortA
  PortVoltage(Requested=nil)
ExternalizedMapping => #6
  Camera(Category="Ucla Miniscope V4")
  Bno055(Category="Ucla Miniscope V4")
  Port(DisplayName="Miniscope Port", Category="Ucla Miniscope V4")
  PortVoltage(DisplayName="Miniscope PortVoltage", Category="Ucla Miniscope V4")
#5, #6 -> OpenEphys.Onix1.ConfigureUclaMiniscopeV4 => #7
  Name=UclaMiniscopeV4
  Camera
    DeviceName=UclaMiniscopeV4/UclaMiniscopeV4
    DeviceAddress=512
    Enable=true
    FrameRate=Fps30
    SensorGain=Medium
    InterleaveLed=false
    LedBrightness=98.8
    Focus=0
  Bno055(DeviceName=UclaMiniscopeV4/PolledBno055, DeviceAddress=513, Enable=true, AxisMap=ZYX, AxisSign=MirrorZ)
  Port=PortB
  PortVoltage(Requested=nil)
Bonsai.Gui.SliderBuilder Focus(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Minimum=-100, Maximum=100, DecimalPlaces=0, Value=-12) => #8
-> PropertyMapping(Focus) => #9
Bonsai.Gui.SliderBuilder "LED Brightness"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Minimum=0, Maximum=100, DecimalPlaces=0, Value=50) => #10
-> PropertyMapping(LedBrightness) => #11
Bonsai.Gui.ComboBoxBuilder Gain(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Items(string=Low, string=Medium, string=High), SelectedItem=Medium) => #12
-> Bonsai.Scripting.Expressions.ExpressionTransform ConvertType
  Description="Converts the output of the Gain ComboBox to an integer that ConfigureUclaMiniscopeV4Camera can parse."
  Expression:
    it == "Low" ? 225 :
    it == "Medium" ? 228 :
    it == "High" ? 36 :
    225
-> PropertyMapping(SensorGain) => #14
Bonsai.Gui.ComboBoxBuilder FPS => #15
  Enabled=true
  Visible=true
  Font="Microsoft Sans Serif, 8.25pt"
  Items(string=FPS30, string=FPS25, string=FPS20, string=FPS15, string=FPS10)
  SelectedItem=""
-> Bonsai.Scripting.Expressions.ExpressionTransform ConvertType
  Expression:
    it == "FPS30" ? 4 :
    it == "FPS25" ? 3 :
    it == "FPS20" ? 2 :
    it == "FPS15" ? 1 :
    it == "FPS10" ? 0 :
    4
-> PropertyMapping(FrameRate) => #17
#7, #9, #11, #14, #17 -> Disable OpenEphys.Onix1.ConfigureUclaMiniscopeV4Camera(DeviceName="", DeviceAddress=512, Enable=true, FrameRate=Fps30, SensorGain=Medium, InterleaveLed=false, LedBrightness=50, Focus=-12)
-> OpenEphys.Onix1.StartAcquisition(ReadSize=8192, WriteSize=2048) => #19
SubscribeSubject Abort => #20
#19, #20 -> TakeUntil
-> WorkflowOutput
#19 -> Timestamp => #23
SubscribeSubject Folder
-> Delay(DueTime=PT0.5S) => #25
#23, #25 -> Gate
-> SelectMany CsvWriter
    WorkflowInput Source1 => #0
    SubscribeSubject Folder
    -> Format(Format={0}\Initialized-time.csv)
    -> PropertyMapping(FileName) => #3
    #0, #3 -> Bonsai.IO.CsvWriter
      FileName=..\data\experiment_results\test\2026-4-8\16-23-23\Initialized-time.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=false
      Selector="Timestamp,Value"
    -> WorkflowOutput
#19 -> PublishSubject Initialized
#8 -> VisualizerMapping
-> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text=Focus)
-> VisualizerMapping => #31
#10 -> VisualizerMapping
-> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="LED Brightness")
-> VisualizerMapping => #34
#12 -> VisualizerMapping
-> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text=Gain)
-> VisualizerMapping => #37
#15 -> VisualizerMapping
-> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="Frame Rate")
-> VisualizerMapping => #40
#31, #34, #37, #40 -> Bonsai.Gui.TableLayoutPanelBuilder MiniscopeConfigParams(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
-> VisualizerMapping => #42
OpenEphys.Onix1.UclaMiniscopeV4CameraData(DeviceName=UclaMiniscopeV4/UclaMiniscopeV4, DataType=U8) => #43
SubscribeSubject Initialized => #44
#43, #44 -> SubscribeWhen => #45
-> MemberSelector(Selector=Image) => #46
-> GroupWorkflow "Implement df/f"(Description="Calculates df/f and displays it if the df/f checkbox is marked") => #47
    WorkflowInput Source1 => #0
    -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.0039215686, Shift=0) => #1
    -> Bonsai.Dsp.RunningAverage(Alpha=0.01) => #2
    #1, #2 -> Zip
    -> Subtract => #4
    #4, #2 -> Zip
    -> Divide
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=255, Shift=0) => #7
    #0, #7 -> Zip => #8
    SubscribeSubject "do df/f" => #9
    #8, #9 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2 ? it.Item1.Item2 : it.Item1.Item1
    -> WorkflowOutput
#47, #46 -> GroupWorkflow Saturation(Description="If a pixel in the video feed is 255, change it to red") => #48
    WorkflowInput Source1
    -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr) => #1
    WorkflowInput Source2
    -> Bonsai.Vision.Threshold(ThresholdValue=254, MaxValue=255, ThresholdType=Binary)
    -> BitwiseNot => #4
    #1, #4 -> Zip
    -> Bonsai.Vision.Mask(FillValue(Val0=0, Val1=0, Val2=255, Val3=0))
    -> WorkflowOutput
Bonsai.Gui.SliderBuilder A(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Minimum=0, Maximum=1, DecimalPlaces=2, Value=1) => #49
Bonsai.Gui.SliderBuilder B(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Minimum=0, Maximum=1, DecimalPlaces=2, Value=0) => #50
#48, #49, #50 -> GroupWorkflow "Implement A/B Value"
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    WorkflowInput Source3 => #2
    #1, #2 -> CombineLatest => #3
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Calculate Scale"
      Expression: 1.0 / Math.Max(it.Item1 - it.Item2, 0.01)
    -> PropertyMapping(Scale) => #5
    #3 -> Bonsai.Scripting.Expressions.ExpressionTransform "Calculate Shift"
      Expression: -it.Item2 * 255.0 / Math.Max(it.Item1 - it.Item2, 0.01)
    -> PropertyMapping(Shift) => #7
    #0, #5, #7 -> Bonsai.Dsp.ConvertScale(Depth=nil, Scale=1, Shift=-0)
    -> WorkflowOutput
-> VisualizerMapping => #52
Bonsai.Gui.CheckBoxBuilder df/f(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text=df/f, Checked=false) => #53
-> VisualizerMapping => #54
#49 -> VisualizerMapping
-> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text=A)
-> VisualizerMapping => #57
#50 -> VisualizerMapping
-> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text=B)
-> VisualizerMapping => #60
#52, #54, #57, #60 -> Bonsai.Gui.TableLayoutPanelBuilder
  Enabled=true
  Visible=true
  ColumnCount=1
  RowCount=4
  ColumnStyles=""
  RowStyles
    RowStyle(SizeType=Percent, Height=70)
    RowStyle(SizeType=Percent, Height=10)
    RowStyle(SizeType=Percent, Height=10)
    RowStyle(SizeType=Percent, Height=10)
  CellSpans=""
-> VisualizerMapping => #62
#42, #62 -> Bonsai.Gui.TableLayoutPanelBuilder Miniscope
  Enabled=true
  Visible=true
  Font="Microsoft Sans Serif, 8.25pt"
  ColumnCount=2
  RowCount=1
  ColumnStyles(ColumnStyle(SizeType=Percent, Width=35), ColumnStyle(SizeType=Percent, Width=65))
  RowStyles=""
  CellSpans=""
#53 -> PublishSubject "do df/f"
ExternalizedMapping(Value(DisplayName=path, Category="Initial - DO NOT CHANGE"))
-> StringProperty(Value=..\data\experiment_results) => #66
ExternalizedMapping(Value(DisplayName=rat_name, Category="Initial - DO NOT CHANGE"))
-> StringProperty(Value=test) => #68
#66, #68 -> Zip
-> Format(Format={0}\{1}, Selector="Item1,Item2") => #70
#1 -> Timestamp
-> Format => #72
  Format={0}-{1}-{2}\{3}-{4}-{4}
  Selector="Timestamp.DateTime.Year,Timestamp.DateTime.Month,Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second"
#70, #72 -> Zip
-> Format(Format={0}\{1}, Selector="Item1,Item2")
-> BehaviorSubject Folder
#45 -> MemberSelector(Selector=Clock) => #76
SubscribeSubject Start => #77
#76, #77 -> SubscribeWhen => #78
SubscribeSubject Start => #79
#78, #79 -> WindowTrigger(Count=nil) => #80
SubscribeSubject Abort => #81
#80, #81 -> TakeUntil
-> Disable SelectMany MatrixWriter
    WorkflowInput Source1 => #0
    SubscribeSubject Folder
    -> Format(Format={0}\Miniscope\ucla-miniscope-v4-clock.raw)
    -> PropertyMapping(Path) => #3
    #0, #3 -> Bonsai.Dsp.MatrixWriter(Path=..\data\experiment_results\test\2026-4-7\15-17-17\Miniscope\ucla-miniscope-v4-clock.raw, Suffix=None, Overwrite=false, Layout=ColumnMajor)
    -> WorkflowOutput
SubscribeSubject Start => #84
#46, #84 -> SubscribeWhen => #85
-> BufferCount(Count=1000, Skip=nil)
-> Bonsai.Scripting.Expressions.ExpressionTransform => #87
  Expression: true
#84 -> Bonsai.Scripting.Expressions.ExpressionTransform => #88
  Expression: true
#87, #88 -> Merge => #89
#85, #89 -> WindowTrigger(Count=nil) => #90
SubscribeSubject Abort => #91
#90, #91 -> TakeUntil
-> SelectMany VideoWriter
    WorkflowInput Source1 => #0
    SubscribeSubject Folder
    -> Format(Format={0}\Miniscope\.avi)
    -> PropertyMapping(FileName) => #3
    #0, #3 -> Bonsai.FFmpeg.VideoWriter
      FileName=..\data\experiment_results\test\2026-4-8\16-24-24\Miniscope\.avi
      Suffix=FileCount
      Overwrite=false
      FrameRate=60
      OutputArguments="-c:v ffv1 -level 3 -coder 1 -context 1 -slices 24 -g 1 -r 60 -pix_fmt bgr24"
    -> WorkflowOutput

GroupWorkflow "Start Acquisition Button"
    GroupWorkflow "Initialize Subjects"
        StringProperty(Value="Start Recording")
        -> BehaviorSubject "Button Text"

        StringProperty(Value="")
        -> BehaviorSubject "Start Pressed"

    SubscribeSubject<System.String> "Button Text"
    -> PropertyMapping(Text)
    -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt", Text="Start Recording")
    -> MulticastSubject "Start Pressed"

    StringProperty(Value="Start Recording") => #5
    SubscribeSubject Start
    -> StringProperty(Value="Stop Recording") => #7
    SubscribeSubject Abort
    -> StringProperty(Value="Close Program") => #9
    SubscribeSubject Close
    -> StringProperty(Value="Start Recording") => #11
    #5, #7, #9, #11 -> Merge
    -> MulticastSubject "Button Text"

    SubscribeSubject "Button Text" => #14
    SubscribeSubject<System.String> "Start Pressed"
    -> Condition => #16
        WorkflowInput Source1
        -> MemberSelector(Selector=Length)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #14, #16 -> Sample => #17
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value="Start Recording"))
        -> Disable MemberSelector(Selector=Length)
        -> Disable GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> PublishSubject Start
    #17 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value="Stop Recording"))
        -> WorkflowOutput
    -> PublishSubject Abort
    #17 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value="Close Program"))
        -> WorkflowOutput
    -> PublishSubject Close

GroupWorkflow Logger
    OpenEphys.Onix1.DigitalInput(DeviceName=BreakoutBoard/DigitalIO) => #0
    SubscribeSubject Initialized => #1
    #0, #1 -> SubscribeWhen => #2
    -> MemberSelector(Selector=Buttons)
    -> Condition "Verify Button"
        WorkflowInput Source1
        -> HasFlag(Operand=WorkflowProperty<OpenEphys.Onix1.BreakoutButtonState>(Value=Check))
        -> WorkflowOutput
    -> SkipWhile
        SubscribeSubject LoggerEnabled
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            it == true ? false :
            it == false ? true :
            true
        -> WorkflowOutput
    -> PublishSubject "Log Button Clicked"
    #2 -> MemberSelector(Selector=Clock) => #7
    SubscribeSubject "Log Button Clicked" => #8
    #7, #8 -> Sample => #9
    SubscribeSubject "Override Pressed"
    -> Condition => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Length)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #7, #11 -> Sample => #12
    #9, #12 -> Merge => #13
    SubscribeSubject LoggerEnabled => #14
    -> PropertyMapping(Enabled) => #15
    #14 -> Delay(DueTime=PT1S)
    -> StringProperty
    -> PropertyMapping(Text) => #18
    #15, #18 -> Bonsai.Gui.TextBoxBuilder "Log Message"(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="", Multiline=true) => #19
    #14 -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder "Submit Log Message"(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="Submit Message") => #21
    #19, #21 -> Sample => #22
    #13, #22 -> CombineLatest => #23
    SubscribeSubject "Submit Log Message Pressed"
    -> Delay(DueTime=PT1S) => #25
    #23, #25 -> Sample
    -> SelectMany
        WorkflowInput Source1 => #0
        SubscribeSubject Folder
        -> Format(Format={0}\log.csv)
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter(FileName=..\data\experiment_results\2026-04-0314-02-20\log.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="Item1,Item2")
        -> WorkflowOutput
    #21 -> PublishSubject "Submit Log Message Pressed"
    SubscribeSubject LoggerEnabled => #29
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #31
    #29 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> Delay(DueTime=PT1S) => #34
    #31, #34 -> Merge
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder "Manual Override Begin Event"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="Log Event") => #37
    -> VisualizerMapping => #38
    #19 -> VisualizerMapping => #39
    #21 -> VisualizerMapping => #40
    #38, #39, #40 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 8.25pt"
      ColumnCount=3
      RowCount=1
      ColumnStyles(ColumnStyle(SizeType=Percent, Width=15), ColumnStyle(SizeType=Percent, Width=70), ColumnStyle(SizeType=Percent, Width=15))
      RowStyles=""
      CellSpans=""
    -> VisualizerMapping => #42
    SubscribeSubject LoggerText
    -> PropertyMapping(Text) => #44
    #42, #44 -> Bonsai.Gui.GroupBoxBuilder "Event Logger"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="Event Logger - Waiting for next event")
    -> WorkflowOutput
    #37 -> PublishSubject "Override Pressed"

    BooleanProperty(Value=false)
    -> PublishSubject LoggerEnabled

    SubscribeSubject "Log Button Clicked"
    -> BooleanProperty(Value=true) => #51
    SubscribeSubject "Submit Log Message Pressed"
    -> BooleanProperty(Value=false) => #53
    SubscribeSubject "Override Pressed"
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Length)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #56
    #51, #53, #56 -> Merge
    -> MulticastSubject LoggerEnabled

    SubscribeSubject "Submit Log Message Pressed" => #59
    -> StringProperty(Value=Submitted!) => #60
    #59 -> Delay(DueTime=PT1S)
    -> StringProperty(Value="Event Logger - Waiting for next event") => #62
    SubscribeSubject "Log Button Clicked" => #63
    -> StringProperty(Value="Signal received from breakout board!") => #64
    #63 -> Delay(DueTime=PT1S)
    -> StringProperty(Value="Input your log message!") => #66
    SubscribeSubject "Override Pressed"
    -> Condition => #68
        WorkflowInput Source1
        -> MemberSelector(Selector=Length)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> StringProperty(Value="Override Signal Received") => #69
    #68 -> Delay(DueTime=PT1S)
    -> StringProperty(Value="Input your log message!") => #71
    StringProperty(Value="Event Logger") => #72
    #60, #62, #64, #66, #69, #71, #72 -> Merge
    -> PublishSubject LoggerText

Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)

Bonsai.Pylon.PylonCapture(SerialNumber=40639612, ParameterFile=acA1440-220uc_40639612.pfs, GrabStrategy=OneByOne) => #97
SubscribeSubject Initialized => #98
#97, #98 -> SubscribeWhen
-> Publish => #100
    WorkflowInput Source1
    -> WorkflowOutput
-> MemberSelector(Selector=Image) => #101
SubscribeSubject Start => #102
#101, #102 -> SubscribeWhen => #103
-> BufferCount(Count=1000, Skip=nil)
-> Bonsai.Scripting.Expressions.ExpressionTransform => #105
  Expression: true
#102 -> Bonsai.Scripting.Expressions.ExpressionTransform => #106
  Expression: true
#105, #106 -> Merge => #107
#103, #107 -> WindowTrigger(Count=nil) => #108
SubscribeSubject Abort => #109
#108, #109 -> TakeUntil
-> SelectMany VideoWriter
    WorkflowInput Source1 => #0
    SubscribeSubject Folder
    -> Format(Format={0}\behavioral_camera\behavioral_camera_feed_.avi)
    -> PropertyMapping(FileName) => #3
    #0, #3 -> Bonsai.FFmpeg.VideoWriter
      FileName=..\data\experiment_results\test\2026-4-8\16-24-24\behavioral_camera\behavioral_camera_feed_.avi
      Suffix=FileCount
      Overwrite=false
      FrameRate=60
      OutputArguments="-c:v ffv1 -level 3 -coder 1 -context 1 -slices 24 -g 1 -r 60 -pix_fmt bgr24"
    -> WorkflowOutput
#101 -> VisualizerMapping
-> Bonsai.Gui.GroupBoxBuilder "Behavioral Camera"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="Behavioral Camera")
#100 -> Disable MemberSelector(Selector=GrabResult) => #114
Disable SubscribeSubject Start => #115
#114, #115 -> Disable SubscribeWhen => #116
#116, #115 -> Disable WindowTrigger(Count=nil) => #117
Disable SubscribeSubject Abort => #118
#117, #118 -> Disable TakeUntil
-> Disable SelectMany CsvWriter(Description="Something is causing a crash with the grab result, so it's disabled until we find a fix.")
    WorkflowInput Source1 => #0
    SubscribeSubject Folder
    -> Format(Format={0}\behavioral_camera_metadata.csv)
    -> PropertyMapping(FileName) => #3
    #0, #3 -> Bonsai.IO.CsvWriter
      FileName=..\data\experiment_results\2026-04-03_14-54-39\behavioral_camera_metadata.csv
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true
      Selector: Orientation.value__,PaddingX,Height,Width,PixelTypeValue.value__,IsValid,SkippedImageCount,ImageNumber,ID,Timestamp,BlockID,PayloadSize,HasCRC,HasChunkData,ErrorDescription,ErrorCode,GrabSucceeded,PayloadTypeValue.value__
    -> WorkflowOutput

Disable IntProperty(Value=0) => #121
Disable Bonsai.Gui.ButtonBuilder "Activate Syringe"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="Activate Syringe") => #122
#121, #122 -> Disable Sample
-> Disable OpenEphys.Onix1.DigitalOutput(DeviceName=BreakoutBoard/DigitalIO)

SubscribeSubject Initialized => #125
SubscribeSubject Folder
-> Take(Count=1) => #127
#125, #127 -> Gate
-> SelectMany "BREAKOUT BOARD DATA"
    WorkflowInput Source1

    OpenEphys.Onix1.DigitalInput(DeviceName=BreakoutBoard/DigitalIO) => #1
    -> MemberSelector(Selector=DigitalInputs) => #2
    SubscribeSubject Start => #3
    #2, #3 -> SubscribeWhen => #4
    SubscribeSubject Abort => #5
    #4, #5 -> TakeUntil => #6
    SubscribeSubject Folder
    -> Format(Format={0}\digital-pins.raw)
    -> PropertyMapping(Path) => #9
    #6, #9 -> Bonsai.Dsp.MatrixWriter(Path=..\data\experiment_results\2026-04-01_18-49-06\digital-pins.raw, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
    #1 -> MemberSelector(Selector=Buttons) => #11
    SubscribeSubject Start => #12
    #11, #12 -> SubscribeWhen => #13
    SubscribeSubject Abort => #14
    #13, #14 -> TakeUntil => #15
    SubscribeSubject Folder
    -> Format(Format={0}\digital-buttons.raw)
    -> PropertyMapping(Path) => #18
    #15, #18 -> Bonsai.Dsp.MatrixWriter(Path=..\data\experiment_results\2026-04-01_18-49-06\digital-buttons.raw, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
    #1 -> MemberSelector(Selector=Clock) => #20
    SubscribeSubject Start => #21
    #20, #21 -> SubscribeWhen => #22
    SubscribeSubject Abort => #23
    #22, #23 -> TakeUntil => #24
    SubscribeSubject Folder
    -> Format(Format={0}\digital-clock.raw)
    -> PropertyMapping(Path) => #27
    #24, #27 -> Bonsai.Dsp.MatrixWriter(Path=..\data\experiment_results\2026-04-01_18-49-06\digital-clock.raw, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    OpenEphys.Onix1.AnalogInput(DeviceName=BreakoutBoard/AnalogIO, BufferSize=100, DataType=Volts) => #29
    -> MemberSelector(Selector=Clock) => #30
    SubscribeSubject Start => #31
    #30, #31 -> SubscribeWhen => #32
    SubscribeSubject Abort => #33
    #32, #33 -> TakeUntil => #34
    SubscribeSubject Folder
    -> Format(Format={0}\analog-clock.raw)
    -> PropertyMapping(Path) => #37
    #34, #37 -> Bonsai.Dsp.MatrixWriter(Path=..\data\experiment_results\2026-04-01_18-49-06\analog-clock.raw, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)
    #29 -> MemberSelector(Selector=AnalogData) => #39
    SubscribeSubject Start => #40
    #39, #40 -> SubscribeWhen => #41
    SubscribeSubject Abort => #42
    #41, #42 -> TakeUntil => #43
    SubscribeSubject Folder
    -> Format(Format={0}\analog-data.raw)
    -> PropertyMapping(Path) => #46
    #43, #46 -> Bonsai.Dsp.MatrixWriter(Path=..\data\experiment_results\2026-04-01_18-49-06\analog-data.raw, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    OpenEphys.Onix1.HarpSyncInputData(DeviceName=BreakoutBoard/HarpSyncInput) => #48
    SubscribeSubject Start => #49
    #48, #49 -> SubscribeWhen => #50
    SubscribeSubject Abort => #51
    #50, #51 -> TakeUntil => #52
    SubscribeSubject Folder
    -> Format(Format={0}\harp-sync.csv)
    -> PropertyMapping(FileName) => #55
    #52, #55 -> Bonsai.IO.CsvWriter
      FileName=..\data\experiment_results\2026-04-01_18-49-06\harp-sync.csv
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=false
      Selector="Clock,HarpTime"

    OpenEphys.Onix1.OutputClockHardwareParameters(DeviceName=BreakoutBoard/OutputClock) => #57
    SubscribeSubject Start => #58
    #57, #58 -> SubscribeWhen => #59
    SubscribeSubject Abort => #60
    #59, #60 -> TakeUntil => #61
    SubscribeSubject Folder
    -> Format(Format={0}\output-clock.csv)
    -> PropertyMapping(FileName) => #64
    #61, #64 -> Bonsai.IO.CsvWriter(FileName=..\data\experiment_results\2026-04-01_18-49-06\output-clock.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

SubscribeSubject "Start Pressed"
-> Timestamp
-> SelectMany CsvWriter
    WorkflowInput Source1 => #0
    SubscribeSubject Folder
    -> Format(Format={0}\BeginData-time.csv)
    -> PropertyMapping(FileName) => #3
    #0, #3 -> Bonsai.IO.CsvWriter
      FileName=..\data\experiment_results\test\2026-4-3\16-5-5\BeginData-time.csv
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=false
      Selector="Timestamp,Value"
    -> WorkflowOutput

SubscribeSubject Initialized => #133
SubscribeSubject Folder
-> Take(Count=1) => #135
#133, #135 -> Gate => #136
ExternalizedMapping(PortName(Category=Commutator), Enable(Category=Commutator), EnableLed(Category=Commutator)) => #137
#136, #137 -> SelectMany "MINISCOPE DATA"
    WorkflowInput Source1

    OpenEphys.Onix1.PortStatus(DeviceName=UclaMiniscopeV4/PortController) => #1
    SubscribeSubject Initialized => #2
    #1, #2 -> SubscribeWhen => #3
    SubscribeSubject Abort => #4
    #3, #4 -> TakeUntil
    -> Timestamp => #6
    SubscribeSubject Folder
    -> Format(Format={0}\Miniscope\port_status.csv)
    -> PropertyMapping(FileName) => #9
    #6, #9 -> Bonsai.IO.CsvWriter(FileName=port-status_.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Timestamp,Value.Clock,Value.StatusCode")

    OpenEphys.Onix1.PolledBno055Data(DeviceName=UclaMiniscopeV4/PolledBno055, PolledRegisters=All) => #11
    SubscribeSubject Initialized => #12
    #11, #12 -> SubscribeWhen => #13
    -> MemberSelector(Selector=Quaternion) => #14
    ExternalizedMapping(PortName, Enable, EnableLed) => #15
    #14, #15 -> IncludeWorkflow(Path=OpenEphys.Commutator:AutoCommutator.bonsai, PortName=nil, Enable=true, EnableLed=true)
    SubscribeSubject Abort => #17
    #13, #17 -> TakeUntil => #18
    SubscribeSubject Folder
    -> Format(Format={0}\Miniscope\bno055.csv)
    -> PropertyMapping(FileName) => #21
    #18, #21 -> Bonsai.IO.CsvWriter
      FileName=bno055_.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=false
      Selector="Clock,EulerAngle,Quaternion,Acceleration,Gravity,Temperature"

SubscribeSubject Initialized => #139
SubscribeSubject Folder
-> Take(Count=1) => #141
#139, #141 -> Gate
-> SelectMany "HEADSTAGE RHS2116 DATA"
    OpenEphys.Onix1.PortStatus(DeviceName=HeadstageRhs2116/LinkController) => #0
    SubscribeSubject Initialized => #1
    #0, #1 -> SubscribeWhen => #2
    SubscribeSubject Abort => #3
    #2, #3 -> TakeUntil
    -> Timestamp => #5
    SubscribeSubject Folder
    -> Format(Format={0}\Ephys\port-status.csv)
    -> PropertyMapping(FileName) => #8
    #5, #8 -> Bonsai.IO.CsvWriter(FileName=port-status_.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Timestamp,Value.Clock,Value.StatusCode")

    OpenEphys.Onix1.DigitalInput(DeviceName=BreakoutBoard/DigitalIO) => #10
    SubscribeSubject Initialized => #11
    #10, #11 -> SubscribeWhen
    -> MemberSelector(Selector=Buttons)
    -> Condition
        WorkflowInput Source1
        -> HasFlag(Operand=WorkflowProperty<OpenEphys.Onix1.BreakoutButtonState>(Value=Square))
        -> DistinctUntilChanged
        -> WorkflowOutput
    -> DoubleProperty(Value=0)
    -> OpenEphys.Onix1.Rhs2116StimulusTrigger(DeviceName=HeadstageRhs2116/StimulusTrigger)

    OpenEphys.Onix1.Rhs2116PairData(DeviceName=HeadstageRhs2116/Rhs2116Pair, BufferSize=30) => #17
    SubscribeSubject Initialized => #18
    #17, #18 -> SubscribeWhen => #19
    SubscribeSubject Abort => #20
    #19, #20 -> TakeUntil => #21
    -> MemberSelector(Selector=Clock) => #22
    SubscribeSubject Folder
    -> Format(Format={0}\Ephys\rhs2116pair-clock.raw)
    -> PropertyMapping(Path) => #25
    #22, #25 -> Bonsai.Dsp.MatrixWriter(Path=rhs2116pair-clock_.raw, Suffix=None, Overwrite=false, Layout=ColumnMajor)
    #21 -> MemberSelector(Selector=DCData) => #27
    SubscribeSubject Folder
    -> Format(Format={0}\Ephys\rhs2116pair-dc.raw)
    -> PropertyMapping(Path) => #30
    #27, #30 -> Bonsai.Dsp.MatrixWriter(Path=rhs2116pair-dc_.raw, Suffix=None, Overwrite=false, Layout=ColumnMajor)
    #21 -> MemberSelector(Selector=AmplifierData) => #32
    SubscribeSubject Folder
    -> Format(Format={0}\Ephys\rhs2116pair-ac.raw, Selector="")
    -> PropertyMapping(Path) => #35
    #32, #35 -> Bonsai.Dsp.MatrixWriter(Path=rhs2116pair-ac_.raw, Suffix=None, Overwrite=false, Layout=ColumnMajor)
    #21 -> MemberSelector(Selector=RecoveryMask) => #37
    SubscribeSubject Folder
    -> Format(Format={0}\Ephys\rhs2116pair-recovery.raw)
    -> PropertyMapping(Path) => #40
    #37, #40 -> Bonsai.Dsp.MatrixWriter(Path=rhs2116pair-recovery_.raw, Suffix=None, Overwrite=false, Layout=ColumnMajor)

    OpenEphys.Onix1.Rhs2116TriggerData(DeviceName=HeadstageRhs2116/StimulusTrigger) => #42
    SubscribeSubject Initialized => #43
    #42, #43 -> SubscribeWhen => #44
    SubscribeSubject Abort => #45
    #44, #45 -> TakeUntil => #46
    SubscribeSubject Folder
    -> Format(Format={0}\Ephys\rhs2116trigger.csv)
    -> PropertyMapping(FileName) => #49
    #46, #49 -> Bonsai.IO.CsvWriter(FileName=rhs2116trigger_.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Clock,Delay,Status,Origin")
