<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Driver" Category="CreateContext" />
        <Property Name="Index" Category="CreateContext" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:CreateContext">
          <onix1:Driver>riffa</onix1:Driver>
          <onix1:Index>0</onix1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Heartbeat" />
        <Property Name="AnalogIO" />
        <Property Name="DigitalIO" />
        <Property Name="ClockOutput" />
        <Property Name="HarpInput" />
        <Property Name="MemoryMonitor" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureBreakoutBoard">
          <onix1:Name>BreakoutBoard</onix1:Name>
          <onix1:Heartbeat>
            <onix1:DeviceName>BreakoutBoard/PersistentHeartbeat</onix1:DeviceName>
            <onix1:DeviceAddress>0</onix1:DeviceAddress>
            <onix1:BeatsPerSecond>100</onix1:BeatsPerSecond>
          </onix1:Heartbeat>
          <onix1:AnalogIO>
            <onix1:DeviceName>BreakoutBoard/AnalogIO</onix1:DeviceName>
            <onix1:DeviceAddress>6</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:InputRange0>TenVolts</onix1:InputRange0>
            <onix1:InputRange1>TenVolts</onix1:InputRange1>
            <onix1:InputRange2>TenVolts</onix1:InputRange2>
            <onix1:InputRange3>TenVolts</onix1:InputRange3>
            <onix1:InputRange4>TenVolts</onix1:InputRange4>
            <onix1:InputRange5>TenVolts</onix1:InputRange5>
            <onix1:InputRange6>TenVolts</onix1:InputRange6>
            <onix1:InputRange7>TenVolts</onix1:InputRange7>
            <onix1:InputRange8>TenVolts</onix1:InputRange8>
            <onix1:InputRange9>TenVolts</onix1:InputRange9>
            <onix1:InputRange10>TenVolts</onix1:InputRange10>
            <onix1:InputRange11>TenVolts</onix1:InputRange11>
            <onix1:Direction0>Input</onix1:Direction0>
            <onix1:Direction1>Input</onix1:Direction1>
            <onix1:Direction2>Input</onix1:Direction2>
            <onix1:Direction3>Input</onix1:Direction3>
            <onix1:Direction4>Input</onix1:Direction4>
            <onix1:Direction5>Input</onix1:Direction5>
            <onix1:Direction6>Input</onix1:Direction6>
            <onix1:Direction7>Input</onix1:Direction7>
            <onix1:Direction8>Input</onix1:Direction8>
            <onix1:Direction9>Input</onix1:Direction9>
            <onix1:Direction10>Input</onix1:Direction10>
            <onix1:Direction11>Input</onix1:Direction11>
          </onix1:AnalogIO>
          <onix1:DigitalIO>
            <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
            <onix1:DeviceAddress>7</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:DeadTime>0</onix1:DeadTime>
            <onix1:SampleRate>20</onix1:SampleRate>
          </onix1:DigitalIO>
          <onix1:ClockOutput>
            <onix1:DeviceName>BreakoutBoard/OutputClock</onix1:DeviceName>
            <onix1:DeviceAddress>5</onix1:DeviceAddress>
            <onix1:ClockGate>true</onix1:ClockGate>
            <onix1:Frequency>1000000</onix1:Frequency>
            <onix1:DutyCycle>50</onix1:DutyCycle>
            <onix1:Delay>0</onix1:Delay>
          </onix1:ClockOutput>
          <onix1:HarpInput>
            <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
            <onix1:DeviceAddress>12</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:Source>Breakout</onix1:Source>
          </onix1:HarpInput>
          <onix1:MemoryMonitor>
            <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
            <onix1:DeviceAddress>10</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:SamplesPerSecond>10</onix1:SamplesPerSecond>
          </onix1:MemoryMonitor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="Rhs2116Pair" Category="Headstage Rhs2116" />
          <Property Name="StimulusTrigger" Category="Headstage Rhs2116" />
          <Property Name="Port" DisplayName="Headstage Port" Category="Headstage Rhs2116" />
          <Property Name="PortVoltage" DisplayName="Headstage PortVoltage" Category="Headstage Rhs2116" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:ConfigureHeadstageRhs2116">
            <onix1:Name>HeadstageRhs2116</onix1:Name>
            <onix1:Rhs2116Pair>
              <onix1:DeviceName>HeadstageRhs2116/Rhs2116Pair</onix1:DeviceName>
              <onix1:DeviceAddress>256</onix1:DeviceAddress>
              <onix1:Enable>true</onix1:Enable>
              <onix1:DspCutoff>Off</onix1:DspCutoff>
              <onix1:AnalogLowCutoff>Low100mHz</onix1:AnalogLowCutoff>
              <onix1:AnalogLowCutoffRecovery>Low250Hz</onix1:AnalogLowCutoffRecovery>
              <onix1:AnalogHighCutoff>High10000Hz</onix1:AnalogHighCutoff>
            </onix1:Rhs2116Pair>
            <onix1:StimulusTrigger>
              <onix1:DeviceName>HeadstageRhs2116/StimulusTrigger</onix1:DeviceName>
              <onix1:DeviceAddress>258</onix1:DeviceAddress>
              <onix1:Enable>true</onix1:Enable>
              <onix1:TriggerSource>Local</onix1:TriggerSource>
              <onix1:Armed>true</onix1:Armed>
              <onix1:StimulusSequence>
                <onix1:Stimuli>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                  <onix1:Rhs2116Stimulus>
                    <onix1:NumberOfStimuli>0</onix1:NumberOfStimuli>
                    <onix1:AnodicFirst>true</onix1:AnodicFirst>
                    <onix1:DelaySamples>0</onix1:DelaySamples>
                    <onix1:DwellSamples>0</onix1:DwellSamples>
                    <onix1:AnodicAmplitudeSteps>0</onix1:AnodicAmplitudeSteps>
                    <onix1:AnodicWidthSamples>0</onix1:AnodicWidthSamples>
                    <onix1:CathodicAmplitudeSteps>0</onix1:CathodicAmplitudeSteps>
                    <onix1:CathodicWidthSamples>0</onix1:CathodicWidthSamples>
                    <onix1:InterStimulusIntervalSamples>0</onix1:InterStimulusIntervalSamples>
                  </onix1:Rhs2116Stimulus>
                </onix1:Stimuli>
                <onix1:CurrentStepSize>Step5000nA</onix1:CurrentStepSize>
              </onix1:StimulusSequence>
            </onix1:StimulusTrigger>
            <onix1:Port>PortA</onix1:Port>
            <onix1:PortVoltage>
              <onix1:Requested xsi:nil="true" />
            </onix1:PortVoltage>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Camera" Description="Properties for the Ucla MiniscopeV4 Camera" Category="Ucla Miniscope V4" />
        <Property Name="Bno055" Description="Device configuration for the polled Bno055 device" Category="Ucla Miniscope V4" />
        <Property Name="Port" DisplayName="Miniscope Port" Category="Ucla Miniscope V4" />
        <Property Name="PortVoltage" DisplayName="Miniscope PortVoltage" Category="Ucla Miniscope V4" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureUclaMiniscopeV4">
          <onix1:Name>UclaMiniscopeV4</onix1:Name>
          <onix1:Camera>
            <onix1:DeviceName>UclaMiniscopeV4/UclaMiniscopeV4</onix1:DeviceName>
            <onix1:DeviceAddress>512</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:FrameRate>Fps30</onix1:FrameRate>
            <onix1:SensorGain>Medium</onix1:SensorGain>
            <onix1:InterleaveLed>false</onix1:InterleaveLed>
            <onix1:LedBrightness>20</onix1:LedBrightness>
            <onix1:Focus>0</onix1:Focus>
          </onix1:Camera>
          <onix1:Bno055>
            <onix1:DeviceName>UclaMiniscopeV4/PolledBno055</onix1:DeviceName>
            <onix1:DeviceAddress>513</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:AxisMap>ZYX</onix1:AxisMap>
            <onix1:AxisSign>MirrorZ</onix1:AxisSign>
          </onix1:Bno055>
          <onix1:Port>PortB</onix1:Port>
          <onix1:PortVoltage>
            <onix1:Requested xsi:nil="true" />
          </onix1:PortVoltage>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:ConfigurePolledBno055">
            <onix1:DeviceName>Bno055</onix1:DeviceName>
            <onix1:DeviceAddress>513</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:AxisMap>XYZ</onix1:AxisMap>
            <onix1:AxisSign>Default</onix1:AxisSign>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:SliderBuilder">
          <gui:Name>Focus</gui:Name>
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:Minimum>-100</gui:Minimum>
          <gui:Maximum>100</gui:Maximum>
          <gui:DecimalPlaces>0</gui:DecimalPlaces>
          <gui:Value>-12</gui:Value>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="Focus" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:SliderBuilder">
          <gui:Name>LED Brightness</gui:Name>
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:Minimum>0</gui:Minimum>
          <gui:Maximum>100</gui:Maximum>
          <gui:DecimalPlaces>0</gui:DecimalPlaces>
          <gui:Value>50</gui:Value>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="LedBrightness" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:ComboBoxBuilder">
          <gui:Name>Gain</gui:Name>
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:Items>
            <gui:string>Low</gui:string>
            <gui:string>Medium</gui:string>
            <gui:string>High</gui:string>
          </gui:Items>
          <gui:SelectedItem>Medium</gui:SelectedItem>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Name>ConvertType</scr:Name>
          <scr:Description>Converts the output of the Gain ComboBox to an integer that ConfigureUclaMiniscopeV4Camera can parse.</scr:Description>
          <scr:Expression>it == "Low" ? 225 :
it == "Medium" ? 228 :
it == "High" ? 36 :
225
</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="SensorGain" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:ComboBoxBuilder">
          <gui:Name>FPS</gui:Name>
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:Items>
            <gui:string>FPS30</gui:string>
            <gui:string>FPS25</gui:string>
            <gui:string>FPS20</gui:string>
            <gui:string>FPS15</gui:string>
            <gui:string>FPS10</gui:string>
          </gui:Items>
          <gui:SelectedItem />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Name>ConvertType</scr:Name>
          <scr:Expression>it == "FPS30" ? 4 :
it == "FPS25" ? 3 :
it == "FPS20" ? 2 :
it == "FPS15" ? 1 :
it == "FPS10" ? 0 :
4
</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FrameRate" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:ConfigureUclaMiniscopeV4Camera">
            <onix1:DeviceName>Camera</onix1:DeviceName>
            <onix1:DeviceAddress>512</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:FrameRate>Fps30</onix1:FrameRate>
            <onix1:SensorGain>Medium</onix1:SensorGain>
            <onix1:InterleaveLed>false</onix1:InterleaveLed>
            <onix1:LedBrightness>50</onix1:LedBrightness>
            <onix1:Focus>-12</onix1:Focus>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:StartAcquisition">
          <onix1:ReadSize>8192</onix1:ReadSize>
          <onix1:WriteSize>2048</onix1:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Close</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Folder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Gate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CsvWriter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Initialized-time.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-14\18-2-2\Initialized-time.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Timestamp,Value</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:GroupBoxBuilder">
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:Text>Focus</gui:Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:GroupBoxBuilder">
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:Text>LED Brightness</gui:Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:GroupBoxBuilder">
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:Text>Gain</gui:Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:GroupBoxBuilder">
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:Text>Frame Rate</gui:Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:TableLayoutPanelBuilder">
          <gui:Name>MiniscopeConfigParams</gui:Name>
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:ColumnCount>1</gui:ColumnCount>
          <gui:RowCount>4</gui:RowCount>
          <gui:ColumnStyles />
          <gui:RowStyles />
          <gui:CellSpans />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:UclaMiniscopeV4CameraData">
          <onix1:DeviceName>UclaMiniscopeV4/UclaMiniscopeV4</onix1:DeviceName>
          <onix1:DataType>U8</onix1:DataType>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Implement df/f</Name>
        <Description>Calculates df/f and displays it if the df/f checkbox is marked</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>F32</dsp:Depth>
                <dsp:Scale>0.0039215686</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:RunningAverage">
                <dsp:Alpha>0.01</dsp:Alpha>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>U8</dsp:Depth>
                <dsp:Scale>255</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>do df/f</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item2 ? it.Item1.Item2 : it.Item1.Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Saturation</Name>
        <Description>If a pixel in the video feed is 255, change it to red</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Gray2Bgr</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>254</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Mask">
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="gui:SliderBuilder">
        <gui:Name>A</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Minimum>0</gui:Minimum>
        <gui:Maximum>1</gui:Maximum>
        <gui:DecimalPlaces>2</gui:DecimalPlaces>
        <gui:Value>1</gui:Value>
      </Expression>
      <Expression xsi:type="gui:SliderBuilder">
        <gui:Name>B</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Minimum>0</gui:Minimum>
        <gui:Maximum>1</gui:Maximum>
        <gui:DecimalPlaces>2</gui:DecimalPlaces>
        <gui:Value>0</gui:Value>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Implement A/B Value</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source3</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Calculate Scale</scr:Name>
              <scr:Expression>1.0 / Math.Max(it.Item1 - it.Item2, 0.01)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Scale" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Calculate Shift</scr:Name>
              <scr:Expression>-it.Item2 * 255.0 / Math.Max(it.Item1 - it.Item2, 0.01)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Shift" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth xsi:nil="true" />
                <dsp:Scale>1</dsp:Scale>
                <dsp:Shift>-0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:CheckBoxBuilder">
        <gui:Name>df/f</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Text>df/f</gui:Text>
        <gui:Checked>false</gui:Checked>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:GroupBoxBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Text>A</gui:Text>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:GroupBoxBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Text>B</gui:Text>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Name>Miniscope</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>4</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles>
          <gui:RowStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Height>70</gui:Height>
          </gui:RowStyle>
          <gui:RowStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Height>10</gui:Height>
          </gui:RowStyle>
          <gui:RowStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Height>10</gui:Height>
          </gui:RowStyle>
          <gui:RowStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Height>10</gui:Height>
          </gui:RowStyle>
        </gui:RowStyles>
        <gui:CellSpans />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="VisualizerMapping" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="gui:TableLayoutPanelBuilder">
          <gui:Name>Miniscope</gui:Name>
          <gui:Enabled>true</gui:Enabled>
          <gui:Visible>true</gui:Visible>
          <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
          <gui:ColumnCount>2</gui:ColumnCount>
          <gui:RowCount>1</gui:RowCount>
          <gui:ColumnStyles>
            <gui:ColumnStyle>
              <gui:SizeType>Percent</gui:SizeType>
              <gui:Width>35</gui:Width>
            </gui:ColumnStyle>
            <gui:ColumnStyle>
              <gui:SizeType>Percent</gui:SizeType>
              <gui:Width>65</gui:Width>
            </gui:ColumnStyle>
          </gui:ColumnStyles>
          <gui:RowStyles />
          <gui:CellSpans />
        </Builder>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>do df/f</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="path" Category="Initial - DO NOT CHANGE" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>..\data\experiment_results</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="rat_name" Category="Initial - DO NOT CHANGE" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}\{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}-{1}-{2}\{3}-{4}-{4}</Format>
        <Selector>Timestamp.DateTime.Year,Timestamp.DateTime.Month,Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}\{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Folder</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Abort</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>MatrixWriter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Miniscope\ucla-miniscope-v4-clock.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-4-7\15-17-17\Miniscope\ucla-miniscope-v4-clock.raw</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferCount">
          <rx:Count>1000</rx:Count>
          <rx:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>true</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>true</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Abort</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>VideoWriter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Miniscope\.avi</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ffmpeg:VideoWriter">
                <ffmpeg:FileName>..\data\experiment_results\test\2026-4-14\18-2-2\Miniscope\.avi</ffmpeg:FileName>
                <ffmpeg:Suffix>FileCount</ffmpeg:Suffix>
                <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
                <ffmpeg:FrameRate>60</ffmpeg:FrameRate>
                <ffmpeg:OutputArguments>-c:v ffv1 -level 3 -coder 1 -context 1 -slices 24 -g 1 -r 60 -pix_fmt bgr24</ffmpeg:OutputArguments>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Start Acquisition Button.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logger.bonsai" />
      <Expression xsi:type="gui:PropertyGridBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:HelpVisible>true</gui:HelpVisible>
        <gui:ToolbarVisible>true</gui:ToolbarVisible>
        <gui:AutoRefresh>false</gui:AutoRefresh>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Behavioral Camera.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\BreakoutBoardData.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Start Pressed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CsvWriter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\BeginData-time.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-3\16-5-5\BeginData-time.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Timestamp,Value</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" Category="Commutator" />
        <Property Name="Enable" Description="Enable/disable the auto commutator" Category="Commutator" />
        <Property Name="EnableLed" Category="Commutator" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Miniscope Data Subworkflow.bonsai">
        <PortName>COM3</PortName>
        <Enable>true</Enable>
        <EnableLed>true</EnableLed>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\HeadstageDataSubworkflow.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="73" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="19" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="31" Label="Source1" />
      <Edge From="10" To="19" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="34" Label="Source1" />
      <Edge From="12" To="19" Label="Source3" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="37" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="19" Label="Source4" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="40" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source5" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="20" To="24" Label="Source1" />
      <Edge From="20" To="30" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="27" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="43" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="43" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="43" Label="Source3" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source4" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="65" Label="Source1" />
      <Edge From="45" To="47" Label="Source1" />
      <Edge From="46" To="47" Label="Source2" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="47" To="78" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="48" To="50" Label="Source2" />
      <Edge From="48" To="87" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="53" Label="Source1" />
      <Edge From="51" To="53" Label="Source2" />
      <Edge From="51" To="57" Label="Source1" />
      <Edge From="52" To="53" Label="Source3" />
      <Edge From="52" To="60" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="63" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="55" To="66" Label="Source1" />
      <Edge From="56" To="63" Label="Source2" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="63" Label="Source3" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source4" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source2" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="71" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="71" Label="Source2" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="75" Label="Source1" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="74" To="75" Label="Source2" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="78" To="80" Label="Source1" />
      <Edge From="79" To="80" Label="Source2" />
      <Edge From="80" To="82" Label="Source1" />
      <Edge From="81" To="82" Label="Source2" />
      <Edge From="82" To="84" Label="Source1" />
      <Edge From="83" To="84" Label="Source2" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="86" To="87" Label="Source2" />
      <Edge From="86" To="90" Label="Source1" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="87" To="92" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="89" To="91" Label="Source1" />
      <Edge From="90" To="91" Label="Source2" />
      <Edge From="91" To="92" Label="Source2" />
      <Edge From="92" To="94" Label="Source1" />
      <Edge From="93" To="94" Label="Source2" />
      <Edge From="94" To="95" Label="Source1" />
      <Edge From="101" To="102" Label="Source1" />
      <Edge From="102" To="103" Label="Source1" />
      <Edge From="104" To="105" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>