<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pylon:PylonCapture">
          <pylon:SerialNumber>40639612</pylon:SerialNumber>
          <pylon:ParameterFile>acA1440-220uc_40639612.pfs</pylon:ParameterFile>
          <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:Publish">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferCount">
          <rx:Count>1000</rx:Count>
          <rx:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>true</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>true</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Abort</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>VideoWriter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\behavioral_camera\behavioral_camera_feed_.avi</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ffmpeg:VideoWriter">
                <ffmpeg:FileName>..\data\experiment_results\test\2026-4-14\17-46-46\behavioral_camera\behavioral_camera_feed_.avi</ffmpeg:FileName>
                <ffmpeg:Suffix>FileCount</ffmpeg:Suffix>
                <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
                <ffmpeg:FrameRate>60</ffmpeg:FrameRate>
                <ffmpeg:OutputArguments>-c:v ffv1 -level 3 -coder 1 -context 1 -slices 24 -g 1 -r 60 -pix_fmt bgr24</ffmpeg:OutputArguments>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:GroupBoxBuilder">
        <gui:Name>Behavioral Camera</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Text>Behavioral Camera</gui:Text>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>GrabResult</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Start</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SubscribeWhen" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WindowTrigger">
            <rx:Count xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Abort</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TakeUntil" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>CsvWriter</Name>
          <Description>Something is causing a crash with the grab result, so it's disabled until we find a fix.</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Folder</Name>
              </Expression>
              <Expression xsi:type="Format">
                <Format>{0}\behavioral_camera_metadata.csv</Format>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>..\data\experiment_results\2026-04-03_14-54-39\behavioral_camera_metadata.csv</io:FileName>
                <io:Append>true</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>true</io:IncludeHeader>
                <io:Selector>Orientation.value__,PaddingX,Height,Width,PixelTypeValue.value__,IsValid,SkippedImageCount,ImageNumber,ID,Timestamp,BlockID,PayloadSize,HasCRC,HasChunkData,ErrorDescription,ErrorCode,GrabSucceeded,PayloadTypeValue.value__</io:Selector>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="4" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source2" />
              <Edge From="4" To="5" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="17" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="15" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="11" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="18" To="20" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>