<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Folder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Gate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>BREAKOUT BOARD DATA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Activate Syringe</gui:Name>
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 15.75pt</gui:Font>
              <gui:Text>Activate Syringe</gui:Text>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:DigitalOutput">
                <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:DigitalInput">
                <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DigitalInputs</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\digital-pins.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-4-14\18-2-2\digital-pins.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Buttons</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\digital-buttons.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-4-14\18-2-2\digital-buttons.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\digital-clock.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-4-14\18-2-2\digital-clock.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:AnalogInput">
                <onix1:DeviceName>BreakoutBoard/AnalogIO</onix1:DeviceName>
                <onix1:BufferSize>100</onix1:BufferSize>
                <onix1:DataType>Volts</onix1:DataType>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\analog-clock.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-4-14\18-2-2\analog-clock.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AnalogData</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\analog-data.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-4-14\18-2-2\analog-data.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Gas Analyzer.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:HarpSyncInputData">
                <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\harp-sync.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-14\18-2-2\harp-sync.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Clock,HarpTime</io:Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:OutputClockHardwareParameters">
                <onix1:DeviceName>BreakoutBoard/OutputClock</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\output-clock.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-14\18-2-2\output-clock.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="16" Label="Source1" />
            <Edge From="6" To="25" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="24" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="25" To="27" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="29" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="33" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="44" Label="Source1" />
            <Edge From="34" To="53" Label="Source1" />
            <Edge From="35" To="37" Label="Source1" />
            <Edge From="36" To="37" Label="Source2" />
            <Edge From="37" To="39" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="39" To="43" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source2" />
            <Edge From="44" To="46" Label="Source1" />
            <Edge From="45" To="46" Label="Source2" />
            <Edge From="46" To="48" Label="Source1" />
            <Edge From="47" To="48" Label="Source2" />
            <Edge From="48" To="52" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source2" />
            <Edge From="54" To="56" Label="Source1" />
            <Edge From="55" To="56" Label="Source2" />
            <Edge From="56" To="58" Label="Source1" />
            <Edge From="57" To="58" Label="Source2" />
            <Edge From="58" To="62" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source2" />
            <Edge From="63" To="65" Label="Source1" />
            <Edge From="64" To="65" Label="Source2" />
            <Edge From="65" To="67" Label="Source1" />
            <Edge From="66" To="67" Label="Source2" />
            <Edge From="67" To="71" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="70" To="71" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>