<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:Bonsai.Ephys.Design;assembly=Bonsai.Ephys.Design"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Folder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Gate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="EphysChannels" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>HEADSTAGE RHS2116 DATA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:PortStatus">
                <onix1:DeviceName>HeadstageRhs2116/LinkController</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Ephys\port-status.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-9-22\16-43-43\Ephys\port-status.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Timestamp,Value.Clock,Value.StatusCode</io:Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:Rhs2116PairData">
                <onix1:DeviceName>HeadstageRhs2116/Rhs2116Pair</onix1:DeviceName>
                <onix1:BufferSize>30</onix1:BufferSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AmplifierData</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="EphysChannels" Description="A comma separated list of channels to be displayed" Category="Headstage Rhs2116" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0,1,2,3,4,5,6,7</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i</Pattern>
              <Separator>,</Separator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Channels" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:SelectChannels">
                <dsp:Channels>
                  <dsp:int>0</dsp:int>
                  <dsp:int>1</dsp:int>
                  <dsp:int>2</dsp:int>
                </dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:WaveformVisualizerBuilder">
              <p1:SampleRate>30000</p1:SampleRate>
              <p1:MaxSamplesPerChannel>1920</p1:MaxSamplesPerChannel>
              <p1:ChannelHeight xsi:nil="true" />
              <p1:Timebase xsi:nil="true" />
              <p1:ColorGrouping xsi:nil="true" />
              <p1:RangeAmplitude xsi:nil="true" />
              <p1:RangeOffset xsi:nil="true" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>Amplifier Data</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="MemberSelector">
              <Selector>DCData</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:SelectChannels">
                <dsp:Channels>
                  <dsp:int>0</dsp:int>
                  <dsp:int>1</dsp:int>
                  <dsp:int>2</dsp:int>
                </dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:WaveformVisualizerBuilder">
              <p1:SampleRate>30000</p1:SampleRate>
              <p1:MaxSamplesPerChannel>1920</p1:MaxSamplesPerChannel>
              <p1:ChannelHeight xsi:nil="true" />
              <p1:Timebase xsi:nil="true" />
              <p1:ColorGrouping xsi:nil="true" />
              <p1:RangeAmplitude xsi:nil="true" />
              <p1:RangeOffset xsi:nil="true" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>DC Data</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TabControlBuilder">
              <gui:Name>Ephys Waveforms</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Ephys\rhs2116pair-clock.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-9-22\16-43-43\Ephys\rhs2116pair-clock.raw</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Ephys\rhs2116pair-dc.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-9-22\16-43-43\Ephys\rhs2116pair-dc.raw</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Ephys\rhs2116pair-ac.raw</Format>
              <Selector />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-9-22\16-43-43\Ephys\rhs2116pair-ac.raw</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RecoveryMask</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Ephys\rhs2116pair-recovery.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-9-22\16-43-43\Ephys\rhs2116pair-recovery.raw</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:DigitalInput">
                <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Buttons</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="onix1:BreakoutButtonState">
                      <Value>Square</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:Rhs2116StimulusTrigger">
                <onix1:DeviceName>HeadstageRhs2116/StimulusTrigger</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:Rhs2116TriggerData">
                <onix1:DeviceName>HeadstageRhs2116/StimulusTrigger</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Ephys\rhs2116trigger.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-9-22\16-43-43\Ephys\rhs2116trigger.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Clock,Delay,Status,Origin</io:Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="21" Label="Source1" />
            <Edge From="10" To="28" Label="Source1" />
            <Edge From="10" To="53" Label="Source1" />
            <Edge From="11" To="16" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="15" To="22" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="46" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="27" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="23" To="38" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="32" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="36" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source2" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="40" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="44" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source2" />
            <Edge From="45" To="46" Label="Source2" />
            <Edge From="46" To="48" Label="Source1" />
            <Edge From="47" To="48" Label="Source2" />
            <Edge From="48" To="52" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source2" />
            <Edge From="53" To="55" Label="Source1" />
            <Edge From="54" To="55" Label="Source2" />
            <Edge From="55" To="57" Label="Source1" />
            <Edge From="56" To="57" Label="Source2" />
            <Edge From="57" To="61" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source2" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="63" To="64" Label="Source1" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="67" To="69" Label="Source1" />
            <Edge From="68" To="69" Label="Source2" />
            <Edge From="69" To="71" Label="Source1" />
            <Edge From="70" To="71" Label="Source2" />
            <Edge From="71" To="75" Label="Source1" />
            <Edge From="72" To="73" Label="Source1" />
            <Edge From="73" To="74" Label="Source1" />
            <Edge From="74" To="75" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>