<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:DigitalInput">
          <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Buttons</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Verify Button</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="HasFlag">
              <Operand xsi:type="WorkflowProperty" TypeArguments="onix1:BreakoutButtonState">
                <Value>Check</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SkipWhile">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerEnabled</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it == true ? false :
it == false ? true :
true</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Log Button Clicked</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Log Button Clicked</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Override Pressed</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LoggerEnabled</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Enabled" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Text" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="gui:TextBoxBuilder">
        <gui:Name>Log Message</gui:Name>
        <gui:Enabled>false</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Text />
        <gui:Multiline>true</gui:Multiline>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Enabled" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Name>Submit Log Message</gui:Name>
        <gui:Enabled>false</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Text>Submit Message</gui:Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Submit Log Message Pressed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\log.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\2026-04-0314-02-20\log.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>Item1,Item2</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Submit Log Message Pressed</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LoggerEnabled</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Enabled" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Name>Manual Override Begin Event</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Text>Log Event</gui:Text>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Name />
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:ColumnCount>3</gui:ColumnCount>
        <gui:RowCount>1</gui:RowCount>
        <gui:ColumnStyles>
          <gui:ColumnStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Width>15</gui:Width>
          </gui:ColumnStyle>
          <gui:ColumnStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Width>70</gui:Width>
          </gui:ColumnStyle>
          <gui:ColumnStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Width>15</gui:Width>
          </gui:ColumnStyle>
        </gui:ColumnStyles>
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>LoggerText</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Text" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="gui:GroupBoxBuilder">
        <gui:Name>Event Logger</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Text>Event Logger - Waiting for next event</gui:Text>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Override Pressed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LoggerEnabled</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Log Button Clicked</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Submit Log Message Pressed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Override Pressed</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>LoggerEnabled</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Submit Log Message Pressed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Submitted!</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Event Logger - Waiting for next event</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Log Button Clicked</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Signal received from breakout board!</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Input your log message!</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Override Pressed</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Override Signal Received</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Input your log message!</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Event Logger</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LoggerText</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="23" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="14" To="20" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="19" To="39" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="21" To="28" Label="Source1" />
      <Edge From="21" To="40" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="26" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="32" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="35" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="47" Label="Source1" />
      <Edge From="38" To="41" Label="Source1" />
      <Edge From="39" To="41" Label="Source2" />
      <Edge From="40" To="41" Label="Source3" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="45" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="57" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="57" Label="Source2" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source3" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="59" To="61" Label="Source1" />
      <Edge From="60" To="73" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="73" Label="Source2" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="63" To="65" Label="Source1" />
      <Edge From="64" To="73" Label="Source3" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="73" Label="Source4" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="68" To="70" Label="Source1" />
      <Edge From="69" To="73" Label="Source5" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="73" Label="Source6" />
      <Edge From="72" To="73" Label="Source7" />
      <Edge From="73" To="74" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>