<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Folder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Gate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" Category="Commutator" />
        <Property Name="Enable" Description="Enable/disable the auto commutator" Category="Commutator" />
        <Property Name="EnableLed" Category="Commutator" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>MINISCOPE DATA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:UclaMiniscopeV4CameraData">
                <onix1:DeviceName>UclaMiniscopeV4/UclaMiniscopeV4</onix1:DeviceName>
                <onix1:DataType>U8</onix1:DataType>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Initialized</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Implement df/f</Name>
              <Description>Calculates df/f and displays it if the df/f checkbox is marked</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertScale">
                      <dsp:Depth>F32</dsp:Depth>
                      <dsp:Scale>0.0039215686</dsp:Scale>
                      <dsp:Shift>0</dsp:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:RunningAverage">
                      <dsp:Alpha>0.01</dsp:Alpha>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Divide" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertScale">
                      <dsp:Depth>U8</dsp:Depth>
                      <dsp:Scale>255</dsp:Scale>
                      <dsp:Shift>0</dsp:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>do df/f</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Item2 ? it.Item1.Item2 : it.Item1.Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Saturation</Name>
              <Description>If a pixel in the video feed is 255, change it to red</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:ConvertColor">
                      <cv:Conversion>Gray2Bgr</cv:Conversion>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>254</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>Binary</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Mask">
                      <cv:FillValue>
                        <cv:Val0>0</cv:Val0>
                        <cv:Val1>0</cv:Val1>
                        <cv:Val2>255</cv:Val2>
                        <cv:Val3>0</cv:Val3>
                      </cv:FillValue>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="gui:SliderBuilder">
              <gui:Name>A</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Minimum>0</gui:Minimum>
              <gui:Maximum>1</gui:Maximum>
              <gui:DecimalPlaces>2</gui:DecimalPlaces>
              <gui:Value>1</gui:Value>
            </Expression>
            <Expression xsi:type="gui:SliderBuilder">
              <gui:Name>B</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Minimum>0</gui:Minimum>
              <gui:Maximum>1</gui:Maximum>
              <gui:DecimalPlaces>2</gui:DecimalPlaces>
              <gui:Value>0</gui:Value>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Implement A/B Value</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source3</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Calculate Scale</scr:Name>
                    <scr:Expression>1.0 / Math.Max(it.Item1 - it.Item2, 0.01)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Scale" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Calculate Shift</scr:Name>
                    <scr:Expression>-it.Item2 * 255.0 / Math.Max(it.Item1 - it.Item2, 0.01)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Shift" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ConvertScale">
                      <dsp:Depth xsi:nil="true" />
                      <dsp:Scale>1</dsp:Scale>
                      <dsp:Shift>-0</dsp:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:CheckBoxBuilder">
              <gui:Name>df/f</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Text>df/f</gui:Text>
              <gui:Checked>false</gui:Checked>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Text>A</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Text>B</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Miniscope</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>4</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>70</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>10</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>10</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>10</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>do df/f</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Miniscope\ucla-miniscope-v4-clock.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\test\2026-4-7\15-17-17\Miniscope\ucla-miniscope-v4-clock.raw</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>1000</rx:Count>
                <rx:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>true</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>true</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WindowTrigger">
                <rx:Count xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>VideoWriter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Folder</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\Miniscope\.avi</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ffmpeg:VideoWriter">
                      <ffmpeg:FileName>..\data\experiment_results\test\2026-4-14\18-2-2\Miniscope\.avi</ffmpeg:FileName>
                      <ffmpeg:Suffix>FileCount</ffmpeg:Suffix>
                      <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
                      <ffmpeg:FrameRate>60</ffmpeg:FrameRate>
                      <ffmpeg:OutputArguments>-c:v ffv1 -level 3 -coder 1 -context 1 -slices 24 -g 1 -r 60 -pix_fmt bgr24</ffmpeg:OutputArguments>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:PortStatus">
                <onix1:DeviceName>UclaMiniscopeV4/PortController</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Miniscope\port_status.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-14\17-46-46\Miniscope\port_status.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Timestamp,Value.Clock,Value.StatusCode</io:Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:PolledBno055Data">
                <onix1:DeviceName>UclaMiniscopeV4/PolledBno055</onix1:DeviceName>
                <onix1:PolledRegisters>All</onix1:PolledRegisters>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Quaternion</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
              <Property Name="Enable" />
              <Property Name="EnableLed" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenEphys.Commutator:AutoCommutator.bonsai">
              <PortName>COM3</PortName>
              <Enable>true</Enable>
              <EnableLed>true</EnableLed>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Miniscope\bno055.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-14\17-46-46\Miniscope\bno055.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Clock,EulerAngle,Quaternion,Acceleration,Gravity,Temperature</io:Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="21" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="6" Label="Source2" />
            <Edge From="4" To="31" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="9" Label="Source2" />
            <Edge From="7" To="13" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="8" To="16" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="19" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="20" Label="Source1" />
            <Edge From="12" To="19" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="19" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source4" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="29" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="30" To="34" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="31" To="36" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="35" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="36" Label="Source2" />
            <Edge From="36" To="38" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="40" To="42" Label="Source1" />
            <Edge From="41" To="42" Label="Source2" />
            <Edge From="42" To="44" Label="Source1" />
            <Edge From="43" To="44" Label="Source2" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="49" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source2" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="50" To="55" Label="Source1" />
            <Edge From="51" To="53" Label="Source1" />
            <Edge From="52" To="53" Label="Source2" />
            <Edge From="54" To="55" Label="Source2" />
            <Edge From="55" To="57" Label="Source1" />
            <Edge From="56" To="57" Label="Source2" />
            <Edge From="57" To="61" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>