<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Driver" Category="CreateContext" />
        <Property Name="Index" Category="CreateContext" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:CreateContext">
          <onix1:Driver>riffa</onix1:Driver>
          <onix1:Index>0</onix1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Heartbeat" />
        <Property Name="AnalogIO" />
        <Property Name="DigitalIO" />
        <Property Name="ClockOutput" />
        <Property Name="HarpInput" />
        <Property Name="MemoryMonitor" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureBreakoutBoard">
          <onix1:Name>BreakoutBoard</onix1:Name>
          <onix1:Heartbeat>
            <onix1:DeviceName>BreakoutBoard/PersistentHeartbeat</onix1:DeviceName>
            <onix1:DeviceAddress>0</onix1:DeviceAddress>
            <onix1:BeatsPerSecond>100</onix1:BeatsPerSecond>
          </onix1:Heartbeat>
          <onix1:AnalogIO>
            <onix1:DeviceName>BreakoutBoard/AnalogIO</onix1:DeviceName>
            <onix1:DeviceAddress>6</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:InputRange0>TenVolts</onix1:InputRange0>
            <onix1:InputRange1>TenVolts</onix1:InputRange1>
            <onix1:InputRange2>TenVolts</onix1:InputRange2>
            <onix1:InputRange3>TenVolts</onix1:InputRange3>
            <onix1:InputRange4>TenVolts</onix1:InputRange4>
            <onix1:InputRange5>TenVolts</onix1:InputRange5>
            <onix1:InputRange6>TenVolts</onix1:InputRange6>
            <onix1:InputRange7>TenVolts</onix1:InputRange7>
            <onix1:InputRange8>TenVolts</onix1:InputRange8>
            <onix1:InputRange9>TenVolts</onix1:InputRange9>
            <onix1:InputRange10>TenVolts</onix1:InputRange10>
            <onix1:InputRange11>TenVolts</onix1:InputRange11>
            <onix1:Direction0>Output</onix1:Direction0>
            <onix1:Direction1>Input</onix1:Direction1>
            <onix1:Direction2>Input</onix1:Direction2>
            <onix1:Direction3>Input</onix1:Direction3>
            <onix1:Direction4>Input</onix1:Direction4>
            <onix1:Direction5>Input</onix1:Direction5>
            <onix1:Direction6>Input</onix1:Direction6>
            <onix1:Direction7>Input</onix1:Direction7>
            <onix1:Direction8>Input</onix1:Direction8>
            <onix1:Direction9>Input</onix1:Direction9>
            <onix1:Direction10>Input</onix1:Direction10>
            <onix1:Direction11>Input</onix1:Direction11>
          </onix1:AnalogIO>
          <onix1:DigitalIO>
            <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
            <onix1:DeviceAddress>7</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:DeadTime>0</onix1:DeadTime>
            <onix1:SampleRate>20</onix1:SampleRate>
          </onix1:DigitalIO>
          <onix1:ClockOutput>
            <onix1:DeviceName>BreakoutBoard/OutputClock</onix1:DeviceName>
            <onix1:DeviceAddress>5</onix1:DeviceAddress>
            <onix1:ClockGate>true</onix1:ClockGate>
            <onix1:Frequency>1000000</onix1:Frequency>
            <onix1:DutyCycle>50</onix1:DutyCycle>
            <onix1:Delay>0</onix1:Delay>
          </onix1:ClockOutput>
          <onix1:HarpInput>
            <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
            <onix1:DeviceAddress>12</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:Source>Breakout</onix1:Source>
          </onix1:HarpInput>
          <onix1:MemoryMonitor>
            <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
            <onix1:DeviceAddress>10</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:SamplesPerSecond>10</onix1:SamplesPerSecond>
          </onix1:MemoryMonitor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:StartAcquisition">
          <onix1:ReadSize>2048</onix1:ReadSize>
          <onix1:WriteSize>2048</onix1:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Close</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="path" Category="Initial - DO NOT CHANGE" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>..\data\experiment_results</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="rat_name" Category="Initial - DO NOT CHANGE" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}\{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}-{1}-{2}\{3}-{4}-{4}</Format>
        <Selector>Timestamp.DateTime.Year,Timestamp.DateTime.Month,Timestamp.DateTime.Day,Timestamp.DateTime.Hour,Timestamp.DateTime.Minute,Timestamp.DateTime.Second</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}\{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Folder</Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Folder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Gate" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CsvWriter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\Initialized-time.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-10\14-35-35\Initialized-time.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Timestamp,Value</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Start Acquisition Button</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Initialize Subjects</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Start Recording</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Button Text</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Start Pressed</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject" TypeArguments="sys:String">
              <Name>Button Text</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Start</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 15.75pt</gui:Font>
              <gui:Text>Start Recording</gui:Text>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Start Pressed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Start Recording</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Stop Recording</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Close Program</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Close</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Start Recording</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Button Text</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Button Text</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject" TypeArguments="sys:String">
              <Name>Start Pressed</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>Start Recording</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Length</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GreaterThan">
                      <Operand xsi:type="IntProperty">
                        <Value>0</Value>
                      </Operand>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>Stop Recording</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>Close Program</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Close</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="12" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="17" To="22" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="gui:PropertyGridBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:HelpVisible>true</gui:HelpVisible>
        <gui:ToolbarVisible>true</gui:ToolbarVisible>
        <gui:AutoRefresh>false</gui:AutoRefresh>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pylon:PylonCapture">
          <pylon:SerialNumber>40639612</pylon:SerialNumber>
          <pylon:ParameterFile>acA1440-220uc_40639612.pfs</pylon:ParameterFile>
          <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:Publish">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferCount">
          <rx:Count>1000</rx:Count>
          <rx:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>true</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>true</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Abort</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>VideoWriter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Bgr2Hsv</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\behavioral_camera\behavioral_camera_feed_.avi</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ffmpeg:VideoWriter">
                <ffmpeg:FileName>..\data\experiment_results\test\2026-4-10\14-35-35\behavioral_camera\behavioral_camera_feed_.avi</ffmpeg:FileName>
                <ffmpeg:Suffix>FileCount</ffmpeg:Suffix>
                <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
                <ffmpeg:FrameRate>60</ffmpeg:FrameRate>
                <ffmpeg:OutputArguments>-c:v ffv1 -level 3 -coder 1 -context 1 -slices 24 -g 1 -r 60 -pix_fmt bgr24</ffmpeg:OutputArguments>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:GroupBoxBuilder">
        <gui:Name>Behavioral Camera</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
        <gui:Text>Behavioral Camera</gui:Text>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>GrabResult</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Start</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SubscribeWhen" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WindowTrigger">
            <rx:Count xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Abort</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TakeUntil" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>CsvWriter</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Folder</Name>
              </Expression>
              <Expression xsi:type="Format">
                <Format>{0}\behavioral_camera_metadata.csv</Format>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="io:CsvWriter">
                <io:FileName>..\data\experiment_results\2026-04-03_14-54-39\behavioral_camera_metadata.csv</io:FileName>
                <io:Append>true</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>true</io:IncludeHeader>
                <io:Selector>Orientation.value__,PaddingX,Height,Width,PixelTypeValue.value__,IsValid,SkippedImageCount,ImageNumber,ID,Timestamp,BlockID,PayloadSize,HasCRC,HasChunkData,ErrorDescription,ErrorCode,GrabSucceeded,PayloadTypeValue.value__</io:Selector>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="4" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source2" />
              <Edge From="4" To="5" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logger</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:DigitalInput">
                <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Initialized</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Buttons</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Verify Button</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="onix1:BreakoutButtonState">
                      <Value>Check</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SkipWhile">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggerEnabled</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == true ? false :
it == false ? true :
true</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Log Button Clicked</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Log Button Clicked</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Override Pressed</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerEnabled</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Enabled" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:TextBoxBuilder">
              <gui:Name>Log Message</gui:Name>
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Text />
              <gui:Multiline>true</gui:Multiline>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Enabled" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Submit Log Message</gui:Name>
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Text>Submit Message</gui:Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Submit Log Message Pressed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Folder</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\log.csv</Format>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>..\data\experiment_results\test\2026-4-7\14-32-32\log.csv</io:FileName>
                    <io:Append>true</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector>Item1,Item2</io:Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Submit Log Message Pressed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerEnabled</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Enabled" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Manual Override Begin Event</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Text>Log Event</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name />
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:ColumnCount>3</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>15</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>70</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>15</gui:Width>
                </gui:ColumnStyle>
              </gui:ColumnStyles>
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerText</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>Event Logger</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 8.25pt</gui:Font>
              <gui:Text>Event Logger - Waiting for next event</gui:Text>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>Override Pressed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LoggerEnabled</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Log Button Clicked</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Submit Log Message Pressed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Override Pressed</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoggerEnabled</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Submit Log Message Pressed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Submitted!</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Event Logger - Waiting for next event</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Log Button Clicked</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Signal received from breakout board!</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Input your log message!</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Override Pressed</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Override Signal Received</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Input your log message!</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Event Logger</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LoggerText</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="23" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="14" To="20" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="22" Label="Source1" />
            <Edge From="19" To="39" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="21" To="28" Label="Source1" />
            <Edge From="21" To="40" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="29" To="32" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="35" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="37" To="47" Label="Source1" />
            <Edge From="38" To="41" Label="Source1" />
            <Edge From="39" To="41" Label="Source2" />
            <Edge From="40" To="41" Label="Source3" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="45" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source2" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="57" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="57" Label="Source2" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source3" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="59" To="61" Label="Source1" />
            <Edge From="60" To="73" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="62" To="73" Label="Source2" />
            <Edge From="63" To="64" Label="Source1" />
            <Edge From="63" To="65" Label="Source1" />
            <Edge From="64" To="73" Label="Source3" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="66" To="73" Label="Source4" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="68" To="70" Label="Source1" />
            <Edge From="69" To="73" Label="Source5" />
            <Edge From="70" To="71" Label="Source1" />
            <Edge From="71" To="73" Label="Source6" />
            <Edge From="72" To="73" Label="Source7" />
            <Edge From="73" To="74" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Initialized</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Folder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Gate" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>BREAKOUT BOARD DATA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Activate Syringe</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 15.75pt</gui:Font>
              <gui:Text>Activate Syringe</gui:Text>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:DigitalOutput">
                <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:DigitalInput">
                <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DigitalInputs</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\digital-pins.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\2026-04-01_18-49-06\digital-pins.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Buttons</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\digital-buttons.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\2026-04-01_18-49-06\digital-buttons.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\digital-clock.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\2026-04-01_18-49-06\digital-clock.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:AnalogInput">
                <onix1:DeviceName>BreakoutBoard/AnalogIO</onix1:DeviceName>
                <onix1:BufferSize>100</onix1:BufferSize>
                <onix1:DataType>Volts</onix1:DataType>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\analog-clock.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\2026-04-01_18-49-06\analog-clock.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AnalogData</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\analog-data.raw</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>..\data\experiment_results\2026-04-01_18-49-06\analog-data.raw</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:HarpSyncInputData">
                <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\harp-sync.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\2026-04-01_18-49-06\harp-sync.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Clock,HarpTime</io:Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="onix1:OutputClockHardwareParameters">
                <onix1:DeviceName>BreakoutBoard/OutputClock</onix1:DeviceName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Abort</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\output-clock.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\2026-04-01_18-49-06\output-clock.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="16" Label="Source1" />
            <Edge From="6" To="25" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="24" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="25" To="27" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="29" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="33" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="44" Label="Source1" />
            <Edge From="35" To="37" Label="Source1" />
            <Edge From="36" To="37" Label="Source2" />
            <Edge From="37" To="39" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="39" To="43" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source2" />
            <Edge From="44" To="46" Label="Source1" />
            <Edge From="45" To="46" Label="Source2" />
            <Edge From="46" To="48" Label="Source1" />
            <Edge From="47" To="48" Label="Source2" />
            <Edge From="48" To="52" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source2" />
            <Edge From="53" To="55" Label="Source1" />
            <Edge From="54" To="55" Label="Source2" />
            <Edge From="55" To="57" Label="Source1" />
            <Edge From="56" To="57" Label="Source2" />
            <Edge From="57" To="61" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source2" />
            <Edge From="62" To="64" Label="Source1" />
            <Edge From="63" To="64" Label="Source2" />
            <Edge From="64" To="66" Label="Source1" />
            <Edge From="65" To="66" Label="Source2" />
            <Edge From="66" To="70" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start Pressed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CsvWriter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\BeginData-time.csv</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>..\data\experiment_results\test\2026-4-9\15-59-59\BeginData-time.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>Timestamp,Value</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="14" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="19" Label="Source1" />
      <Edge From="4" To="20" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="43" Label="Source1" />
      <Edge From="30" To="32" Label="Source1" />
      <Edge From="30" To="41" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="31" To="35" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="32" To="37" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="36" Label="Source1" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="45" Label="Source1" />
      <Edge From="44" To="45" Label="Source2" />
      <Edge From="44" To="46" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="48" Label="Source1" />
      <Edge From="47" To="48" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="51" To="54" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source2" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>